# Generated by Configurator on Fri Nov 04 10:03:46 PDT 2016

# Reset
Property,Core,Initialize,0

# Devices
Device,ThorCam,ThorlabsUSBCamera,ThorCam

# Pre-init settings for devices

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,ThorCam
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: System
# Preset: Startup
ConfigGroup,System,Startup,ThorCam,PixelType,8bit
ConfigGroup,System,Startup,ThorCam,Binning,1
ConfigGroup,System,Startup,ThorCam,TransposeCorrection,0
ConfigGroup,System,Startup,ThorCam,TransposeMirrorX,0
ConfigGroup,System,Startup,ThorCam,TransposeMirrorY,0
ConfigGroup,System,Startup,ThorCam,TransposeXY,0



# PixelSize settings

